CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot containregexp "thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".npy")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>[0-9]{5})
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".npy")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_Illum
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".npy")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'OrigHoechst': 'Plate', 'OrigFITC': 'Plate', 'OrigCy5': 'Plate'}, {'OrigHoechst': 'Well', 'OrigFITC': 'Well', 'OrigCy5': 'Well'}, {'OrigHoechst': 'Site', 'OrigFITC': 'Site', 'OrigCy5': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigFITC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigCy5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigHoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigFITC
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    Regularization factor:0.005
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.003,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MaskImage:[module_num:8|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
    Select the input image:OrigHoechst
    Name the output image:MaskedHoescht
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:9|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
    Select the input image:OrigCy5
    Name the output image:MaskedCy5
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

SaveCroppedObjects:[module_num:10|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
    Do you want to save cropped images or object masks?:Images
    Objects:Cells
    Directory:Default Input Folder sub-folder|/n/data1/hms/dbmi/zitnik/lab/users/kel331/microscopyclock/data/cropped/test/1
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:OrigHoechst
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:OrigHoechst

SaveCroppedObjects:[module_num:11|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
    Do you want to save cropped images or object masks?:Images
    Objects:Cells
    Directory:Default Input Folder sub-folder|/n/data1/hms/dbmi/zitnik/lab/users/kel331/microscopyclock/data/cropped/test/1
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:OrigFITC
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:OrigFITC

SaveCroppedObjects:[module_num:12|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
    Do you want to save cropped images or object masks?:Images
    Objects:Cells
    Directory:Default Input Folder sub-folder|/n/data1/hms/dbmi/zitnik/lab/users/kel331/microscopyclock/data/cropped/test/1
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:OrigCy5
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:OrigCy5
